PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = audiobook_experiment
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        En el siguiente experimento vas a escuchar dos audiolibros de 5 minutos cada uno. Por favor, ponete cómodo/a e intenta sostener la mirada en la cruz de fijación que aparecerá en el centro de la pantalla durante cada cuento.

        Cuando estes listo/a apretá la barra espaciadora: vas a escuchar unos pitidos y luego comenzará el experimento.
    KeyboardComponent key_resp_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SpacebarContinue
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    TextComponent spacebar_text
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = spacebar_response.status == FINISHED
      text [set every repeat] = $EndTrial
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    KeyboardComponent spacebar_response
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = .5
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    ParallelOutComponent p_port_next_book
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 175
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = False
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  Routine LastPrompt
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    TextComponent last_prompt_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp.status == FINISHED
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      text:
        ¡Listo!

        ¿Qué tan largo te pareció el experimento?


        Presioná un número del 1 al 5 para continuar...
    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4','5', 'num_1', 'num_2', 'num_3', 'num_4', 'num_5'
      forceEndRoutine = True
      startVal [time (s)] = .2
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    ParallelOutComponent p_port_last_prompt
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 200
      startVal [condition] = last_prompt_text.status == STARTED
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = False
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  Routine GoodBye
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    TextComponent congrats_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = key_resp_end.status == FINISHED
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      text:
        ¡Felicitaciones!

        Terminaste el experimento.


        Apretá la barra espaciadora para finalizar el experimento...
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent p_port_goodbye
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 225
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine AudioBook
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    SoundComponent audiobook
      forceEndRoutine = False
      hamming = False
      sound [set every repeat] = $AudioFile
      startVal [time (s)] = 0
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    PolygonComponent fixation
      fillColor = white
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [condition] = audiobook.status  == STARTED
      stopVal [condition] = audiobook.status  == FINISHED
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    ParallelOutComponent p_port_stimuli
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 125
      startVal [condition] = audiobook.status ==STARTED
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = False
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  Routine Bips
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    SoundComponent pip
      forceEndRoutine = False
      sound [set every repeat] = ../stimuli/stimuli_audiobook/bip.wav
      startVal [time (s)] = 0
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    PolygonComponent polygon
      fillColor = white
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [condition] = pip.status == STARTED
      stopVal [condition] = pip.status == FINISHED
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    ParallelOutComponent p_port_bips
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 100
      startVal [condition] = pip.status == STARTED
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = False
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  Routine Questionary
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    TextComponent question
      letterHeight = 0.05
      pos = (0, .1)
      startVal [time (s)] = 0
      stopVal [time (s)] = mouse.status == FINISHED
      text [set every repeat] = $Question
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    TextComponent Boton
      letterHeight = 0.025
      pos = (.45, -.45)
      startVal [time (s)] = 0.0
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      text:
        Hace click izquierdo para continuar
    TextboxComponent answer
      bold = False
      borderWidth = 1
      editable = True
      letterHeight = 0.05
      lineSpacing = 1.2
      pos = (0, -.2)
      size = (0.5, 0.5)
      startVal [condition] = question.status == STARTED
      stopVal [duration (s)] = mouse.status == FINISHED
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    KeyboardComponent end_audiobook1
      allowedKeys = 'return'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 2.5
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    ParallelOutComponent p_port_question_book
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 150
      startVal [condition] = question.status ==STARTED
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = False
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Flow
  Routine Instructions
  LoopInitiator audiobook_trials loopType="TrialHandler"
    conditionsFile = AudioBookLoop.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Book', 'kafka'), ('AudioFile', '..\\stimuli\\stimuli_audiobook\\audio01.wav'), ('Question', '¿Quiénes son los protagonistas de esta historia? \n\n Escribí una respuesta de hasta 10 palabras. Cuando termines apretá [Enter] para continuar...'), ('EndTrial', 'Apretá la barra espaciadora para continuar con el segundo cuento...')]),
      OrderedDict([('Book', 'lugones'), ('AudioFile', '..\\stimuli\\stimuli_audiobook\\audio02.wav'), ('Question', '¿Cómo muere el protagonista de la historia? \n\n Escribí una respuesta de hasta 10 palabras. Cuando termines apretá [Enter] para continuar…'), ('EndTrial', 'Apretá la barra espaciadora para continuar...')])]
    LoopInitiator trials_bip1 loopType="TrialHandler"
      loopType = sequential
      nReps = 20
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      conditions:
        [OrderedDict([('AuxVar', np.int64(1))]),
        OrderedDict([('AuxVar', np.int64(2))]),
        OrderedDict([('AuxVar', np.int64(3))]),
        OrderedDict([('AuxVar', np.int64(4))]),
        OrderedDict([('AuxVar', np.int64(5))]),
        OrderedDict([('AuxVar', np.int64(6))]),
        OrderedDict([('AuxVar', np.int64(7))]),
        OrderedDict([('AuxVar', np.int64(8))]),
        OrderedDict([('AuxVar', np.int64(9))]),
        OrderedDict([('AuxVar', np.int64(10))]),
        OrderedDict([('AuxVar', np.int64(11))]),
        OrderedDict([('AuxVar', np.int64(12))]),
        OrderedDict([('AuxVar', np.int64(13))]),
        OrderedDict([('AuxVar', np.int64(14))]),
        OrderedDict([('AuxVar', np.int64(15))]),
        OrderedDict([('AuxVar', np.int64(16))]),
        OrderedDict([('AuxVar', np.int64(17))]),
        OrderedDict([('AuxVar', np.int64(18))]),
        OrderedDict([('AuxVar', np.int64(19))]),
        OrderedDict([('AuxVar', np.int64(20))])]
      Routine Bips
    LoopTerminator trials_bip1
    Routine AudioBook
    Routine Questionary
    Routine SpacebarContinue
    LoopInitiator trials_bip2 loopType="TrialHandler"
      loopType = sequential
      nReps = 20
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      conditions:
        [OrderedDict([('AuxVar2', 1)]),
        OrderedDict([('AuxVar2', 2)]),
        OrderedDict([('AuxVar2', 3)]),
        OrderedDict([('AuxVar2', 4)]),
        OrderedDict([('AuxVar2', 5)]),
        OrderedDict([('AuxVar2', 6)]),
        OrderedDict([('AuxVar2', 7)]),
        OrderedDict([('AuxVar2', 8)]),
        OrderedDict([('AuxVar2', 9)]),
        OrderedDict([('AuxVar2', 10)]),
        OrderedDict([('AuxVar2', 11)]),
        OrderedDict([('AuxVar2', 12)]),
        OrderedDict([('AuxVar2', 13)]),
        OrderedDict([('AuxVar2', 14)]),
        OrderedDict([('AuxVar2', 15)]),
        OrderedDict([('AuxVar2', 16)]),
        OrderedDict([('AuxVar2', 17)]),
        OrderedDict([('AuxVar2', 18)]),
        OrderedDict([('AuxVar2', 19)]),
        OrderedDict([('AuxVar2', 20)])]
      Routine Bips
    LoopTerminator trials_bip2
  LoopTerminator audiobook_trials
  Routine LastPrompt
  Routine GoodBye
