PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = audiobook_experiment
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Instructions
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    KeyboardComponent key_resp_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp_instruction.status == FINISHED
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      text:
        En el siguiente experimento vas a escuchar dos audiolibros de 5 minutos cada uno.

        Por favor, ponete cómodo/a e intenta sostener la mirada en la cruz de fijación que aparecerá en el centro de la pantalla.

        Cuando estes listo/a apretá ESPACIO: vas a escuchar unos pitidos y luego comenzará el experimento.
  Routine SpacebarContinue
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    CodeComponent code_spacebar
      Code Type = Auto->JS
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      Begin Routine:
        audiobook_number = audiobook_trials.thisN + 1
        if audiobook_number==len(audiobook_trials.trialList):
            spacebar_text = "Presioná ESPACIO para finalizar"
        else:
            spacebar_text = "Presioná ESPACIO para escuchar la siguiente historia"
    KeyboardComponent spacebar_response
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = .5
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    TextComponent spacebar_prompt
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = spacebar_response.status == FINISHED
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      text [set every repeat]:
        $spacebar_text
    ParallelOutComponent p_port_next_book
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 175
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = False
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  Routine LastPrompt
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4','5', 'num_1', 'num_2', 'num_3', 'num_4', 'num_5'
      forceEndRoutine = True
      startVal [time (s)] = .2
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    TextComponent last_prompt_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = key_resp.status == FINISHED
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      text:
        ¡Listo!

        ¿Qué tan largo te pareció el experimento?


        Presioná un número del 1 al 5 para continuar...
    ParallelOutComponent p_port_last_prompt
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 200
      startVal [condition] = last_prompt_text.status == STARTED
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = False
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  Routine GoodBye
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    TextComponent congrats_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        ¡Felicitaciones!

        Terminaste el experimento.
    ParallelOutComponent p_port_goodbye
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 225
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine AudioBook
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    SoundComponent audiobook
      deviceLabel = Realtek
      forceEndRoutine = False
      hamming = False
      sound [set every repeat] = $audio_filename
      startVal [time (s)] = 0
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    PolygonComponent fixation
      fillColor = white
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [condition] = audiobook.status  == STARTED
      stopVal [condition] = audiobook.status  == FINISHED
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    ParallelOutComponent p_port_stimuli
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 125
      startVal [condition] = audiobook.status ==STARTED
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = False
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  Routine Bips
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    SoundComponent bip
      deviceLabel = Realtek
      forceEndRoutine = False
      sound [set every repeat] = ../audiobook_stimuli/bip.wav
      startVal [time (s)] = 0
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    PolygonComponent polygon
      fillColor = white
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [condition] = bip.status == STARTED
      stopVal [condition] = bip.status == FINISHED
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    ParallelOutComponent p_port_bips
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 100
      startVal [condition] = pip.status == STARTED
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = False
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  Routine Questionary
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    CodeComponent code_question
      Code Type = Auto->JS
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      Begin Routine:
        question_number = questionary_loop.thisN + 1
        print(questionary_loop.nReps)
        if question_number==1:
            question=question1
            answer_a=answer_1_a
            answer_b=answer_1_b
            answer_c=answer_1_c
            correct_answer=correct_answer_1
        elif question_number==2:
            question=question2
            answer_a=answer_2_a
            answer_b=answer_2_b
            answer_c=answer_2_c
            correct_answer=correct_answer_2
        elif question_number==3:
            question=question3
            answer_a=answer_3_a
            answer_b=answer_3_b
            answer_c=answer_3_c
            correct_answer=correct_answer_3
    KeyboardComponent end_audiobook1
      allowedKeys = 'a', 'b', 'c'
      forceEndRoutine = True
      startVal [time (s)] = .5
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    TextComponent question_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [time (s)] = end_audiobook1.status == FINISHED
      text [set every repeat] = $f"{question}\n\nA) {answer_a}\nB) {answer_b}\nC) {answer_c}\n\nSeleccioná la opción que creas correcta (A, B ó C)."
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    ParallelOutComponent p_port_question_book
      address = USB2TTL8
      disabled = True
      register = EIO
      startData = 150
      startVal [condition] = question.status ==STARTED
      stopData = 0
      stopVal [duration (s)] = 0.5
      syncScreen = True
      syncScreenRefresh = False
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Flow
  Routine Instructions
  LoopInitiator audiobook_trials loopType="TrialHandler"
    conditionsFile = AudioBookLoop.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('audiobook', '03_yoli_hombre'), ('stimuli', '03_yoli_hombre.wav'), ('question1', '¿Cuál era la única intención del rey intergaláctico al venir a la Tierra?'), ('answer_1_a', 'Conquistar el planeta para obtener recursos naturales.'), ('answer_1_b', 'Enseñar tecnología avanzada a los humanos.'), ('answer_1_c', 'Llevarse a Jolie, la conductora de cocina, a su palacio.'), ('correct_answer_1', 'c'), ('question2', '¿Qué amenaza lanzó el alienígena si Jolie no aceptaba ir con él?'), ('answer_2_a', 'Cortaría todas las transmisiones de televisión.'), ('answer_2_b', 'Se llevaría a todos l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,
      OrderedDict([('audiobook', '04_oro_mujer'), ('stimuli', '04_oro_mujer.wav'), ('question1', '¿Qué deseo le pidió el rey Pablo al Dios que se le apareció?'), ('answer_1_a', 'Ser el hombre más joven del mundo para siempre.'), ('answer_1_b', 'Que todo lo que tocara se convirtiera en oro.'), ('answer_1_c', 'Que su hija Irene nunca se enfermara.'), ('correct_answer_1', 'b'), ('question2', '¿Qué le sucedió a la hija del rey cuando intentó consolarlo?'), ('answer_2_a', 'Se convirtió en una estatua de oro al ser tocada por su padre.'), ('answer_2_b', 'Se escapó del palacio asustada por la magia.'), ('a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
    LoopInitiator trials_bip1 loopType="TrialHandler"
      loopType = sequential
      nReps = 10
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      conditions:
        [OrderedDict([('AuxVar', np.int64(1))]),
        OrderedDict([('AuxVar', np.int64(2))]),
        OrderedDict([('AuxVar', np.int64(3))]),
        OrderedDict([('AuxVar', np.int64(4))]),
        OrderedDict([('AuxVar', np.int64(5))]),
        OrderedDict([('AuxVar', np.int64(6))]),
        OrderedDict([('AuxVar', np.int64(7))]),
        OrderedDict([('AuxVar', np.int64(8))]),
        OrderedDict([('AuxVar', np.int64(9))]),
        OrderedDict([('AuxVar', np.int64(10))]),
        OrderedDict([('AuxVar', np.int64(11))]),
        OrderedDict([('AuxVar', np.int64(12))]),
        OrderedDict([('AuxVar', np.int64(13))]),
        OrderedDict([('AuxVar', np.int64(14))]),
        OrderedDict([('AuxVar', np.int64(15))]),
        OrderedDict([('AuxVar', np.int64(16))]),
        OrderedDict([('AuxVar', np.int64(17))]),
        OrderedDict([('AuxVar', np.int64(18))]),
        OrderedDict([('AuxVar', np.int64(19))]),
        OrderedDict([('AuxVar', np.int64(20))])]
      Routine Bips
    LoopTerminator trials_bip1
    Routine AudioBook
    LoopInitiator trials_bip2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 10
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      Routine Bips
    LoopTerminator trials_bip2
    LoopInitiator questionary_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 3
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      Routine Questionary
    LoopTerminator questionary_loop
    Routine SpacebarContinue
  LoopTerminator audiobook_trials
  Routine LastPrompt
  Routine GoodBye
